CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:34
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Custom
    Select the rule criteria:or (extension does isimage) (file does endwith ".npy")

Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Mouse>.*)_ch(?P<ChannelNumber>[0-9]{1,2})
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:4
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "ch00")
    Name to assign these images:Nuclear
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "ch01")
    Name to assign these images:Nucleolar
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "ch02")
    Name to assign these images:Autoantibody
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "ch03")
    Name to assign these images:Cytoplasm
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ColorToGray:[module_num:5|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enabled:False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
    Select the input image:Nuclear
    Conversion method:Combine
    Image type:RGB
    Name the output image:Nucelar_gray
    Relative weight of the red channel:1.0
    Relative weight of the green channel:1.0
    Relative weight of the blue channel:1.0
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
ColorToGray:[module_num:6|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enabled:False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
    Select the input image:Nucleolar
    Conversion method:Combine
    Image type:RGB
    Name the output image:Nucleolar_gray
    Relative weight of the red channel:1.0
    Relative weight of the green channel:1.0
    Relative weight of the blue channel:1.0
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
ColorToGray:[module_num:7|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enabled:False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
    Select the input image:Cytoplasm
    Conversion method:Combine
    Image type:RGB
    Name the output image:Cyto_gray
    Relative weight of the red channel:1.0
    Relative weight of the green channel:1.0
    Relative weight of the blue channel:1.0
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
ColorToGray:[module_num:8|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enabled:False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
    Select the input image:Autoantibody
    Conversion method:Combine
    Image type:RGB
    Name the output image:Autoanitbody_gray
    Relative weight of the red channel:1.0
    Relative weight of the green channel:1.0
    Relative weight of the blue channel:1.0
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
CorrectIlluminationCalculate:[module_num:9|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
    Select the input image:Nuclear
    Name the output image:Nuclear_intensity
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Object size
    Approximate object diameter:300
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:10|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
    Select the input image:Nucleolar
    Name the output image:Nucleolar_intensity
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Object size
    Approximate object diameter:250
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:11|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
    Select the input image:Cytoplasm
    Name the output image:Cytoplasm_intensity
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Object size
    Approximate object diameter:400
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:12|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
    Select the input image:Autoantibody
    Name the output image:Autoanitbody_intensity
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Object size
    Approximate object diameter:500
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:13|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
    Select the input image:Nuclear
    Name the output image:Nuclear_intensity_corrected
    Select the illumination function:Nuclear_intensity
    Select how the illumination function is applied:Divide
    Select the input image:Nucleolar
    Name the output image:Nucleolar_intensity_corrected
    Select the illumination function:Nucleolar_intensity
    Select how the illumination function is applied:Divide
    Select the input image:Cytoplasm
    Name the output image:Cytoplasm_intensity_corrected
    Select the illumination function:Cytoplasm_intensity
    Select how the illumination function is applied:Divide
    Select the input image:Autoantibody
    Name the output image:Autoantibody_intensity_corrected
    Select the illumination function:Autoanitbody_intensity
    Select how the illumination function is applied:Divide
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

IdentifyPrimaryObjects:[module_num:14|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
    Select the input image:Nuclear_intensity_corrected
    Name the primary objects to be identified:Nucleus
    Typical diameter of objects, in pixel units (Min,Max):50,300
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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    Size of adaptive window:50
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    Thresholding method:Otsu

ConvertObjectsToImage:[module_num:15|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
    Select the input objects:Nucleus
    Name the output image:Imgnucleus
    Select the color format:Binary (black & white)
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
OverlayObjects:[module_num:16|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
    Input:Nucleolar_intensity_corrected
    Name the output image:HirNuc
    Objects:Nucleus
    Opacity:0.9

ColorToGray:[module_num:17|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
    Select the input image:HirNuc
    Conversion method:Combine
    Image type:RGB
    Name the output image:OrigGray
    Relative weight of the red channel:1.0
    Relative weight of the green channel:1.0
    Relative weight of the blue channel:1.0
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
IdentifyPrimaryObjects:[module_num:18|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
    Select the input image:OrigGray
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):1,250
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:Never
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:0.9
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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    Size of adaptive window:50
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    Thresholding method:Otsu

EnhanceOrSuppressFeatures:[module_num:19|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
    Select the input image:Nucleolar_intensity_corrected
    Name the output image:holes
    Select the operation:Enhance
    Feature size:200
    Feature type:Neurites
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    Smoothing scale:2.0
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    Enhancement method:Tubeness
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    Rescale result image:No

MaskImage:[module_num:20|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
    Select the input image:holes
    Name the output image:Maskholes
    Use objects or an image as a mask?:Objects
    Select object for mask:Nuclei
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    Invert the mask?:No

IdentifyPrimaryObjects:[module_num:21|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
    Select the input image:Maskholes
    Name the primary objects to be identified:Nucleoli
    Typical diameter of objects, in pixel units (Min,Max):1,150
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:Never
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:0
    Threshold correction factor:0.9
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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    Size of adaptive window:50
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    Thresholding method:Otsu

ConvertObjectsToImage:[module_num:22|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
    Select the input objects:Nucleoli
    Name the output image:MaskNucleoli
    Select the color format:Binary (black & white)
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
GrayToColor:[module_num:23|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
    Select a color scheme:RGB
    Rescale intensity:Yes
    Select the image to be colored red:MaskNucleoli
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    Select the image to be colored blue:Imgnucleus
    Name the output image:NucleoliSeg
    Relative weight for the red image:0.8
    Relative weight for the green image:0.2
    Relative weight for the blue image:0.4
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
IdentifySecondaryObjects:[module_num:24|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
    Select the input objects:Nucleus
    Name the objects to be identified:Wholecytoplasm
    Select the method to identify the secondary objects:Propagation
    Select the input image:Cytoplasm
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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    Size of adaptive window:50
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    Thresholding method:Otsu

MaskObjects:[module_num:25|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
    Select objects to be masked:Nucleus
    Name the masked objects:MaskedNucleoli
    Mask using a region defined by other objects or by binary image?:Image
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    Select the masking image:MaskNucleoli
    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Retain
    Invert the mask?:No

MaskObjects:[module_num:26|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
    Select objects to be masked:Wholecytoplasm
    Name the masked objects:MaskedCytoplasm
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:Nucleus
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Retain
    Invert the mask?:Yes

MaskObjects:[module_num:27|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
    Select objects to be masked:Nucleus
    Name the masked objects:MaskedNucleus
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:MaskedNucleoli
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Retain
    Invert the mask?:Yes

OverlayObjects:[module_num:28|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
    Input:Autoantibody_intensity_corrected
    Name the output image:OverlayCytoplasm
    Objects:MaskedCytoplasm
    Opacity:0.9

OverlayObjects:[module_num:29|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
    Input:Autoantibody_intensity_corrected
    Name the output image:OverlayNucleionly
    Objects:MaskedNucleus
    Opacity:0.9

OverlayObjects:[module_num:30|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
    Input:Autoantibody_intensity_corrected
    Name the output image:OverlayNucleoli
    Objects:MaskedNucleoli
    Opacity:0.9

SaveImages:[module_num:31|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:OverlayCytoplasm
    Select method for constructing file names:From image filename
    Select image name for file prefix:Cytoplasm
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Elsewhere...|/home/dghosh/Documents/HS/OverlayCytoplasm_gray/
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:32|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:NucleoliSeg
    Select method for constructing file names:From image filename
    Select image name for file prefix:Nucleolar
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Elsewhere...|/home/dghosh/Documents/Results_new_control/Nucleolarseg_gray/
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

MeasureObjectIntensity:[module_num:33|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
    Select images to measure:Autoantibody_intensity_corrected
    Select objects to measure:MaskedCytoplasm, MaskedNucleoli, MaskedNucleus

ExportToSpreadsheet:[module_num:34|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Elsewhere...|/home/dghosh/Documents/HS/
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:MaskedNucleus|Intensity_MeanIntensity_Autoantibody_intensity_corrected,MaskedNucleus|Number_Object_Number,MaskedCytoplasm|Number_Object_Number,MaskedCytoplasm|Intensity_MeanIntensity_Autoantibody_intensity_corrected,MaskedNucleoli|Intensity_MeanIntensity_Autoantibody_intensity_corrected,MaskedNucleoli|Number_Object_Number
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:Yes
    Data to export:MaskedCytoplasm
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:MaskedNucleus
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:MaskedNucleoli
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
